CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:7|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
    Select the input image:RescaleIntensity
    Name the output image:Threshold1
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
Threshold:[module_num:8|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
    Select the input image:RescaleIntensity
    Name the output image:Threshold2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
EnhanceEdges:[module_num:9|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
    Select the input image:Threshold1
    Name the output image:EdgedImage
    Automatically calculate the threshold?:Yes
    Absolute threshold:0.2
    Threshold adjustment factor:1.0
    Select an edge-finding method:Canny
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
    Calculate value for low threshold automatically?:Yes
    Low threshold value:0.1

ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Threshold1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Threshold2
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:EdgedImage
    Multiply the third image by:1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:12|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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNuc
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:MaskedNuc
    Name the objects to be identified:CellsFromNuc
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:RescaleIntensity
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:14|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
    Parent objects:Cells
    Child objects:MaskedNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:MaskedNuc
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes
