CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:1,15
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:RescaleIntensity
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes
